CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Time>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:RawData
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    Set intensity range from:Image bit-depth
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:RawData
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:6|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notes:['Highlight well outlines to turn white for identification, and turn wells black so they will not be identified in next module.']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
    Select the input image:ImageAfterMath
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:.5,1
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify and remove well outlines']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyWells
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:8|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notes:['Expand well outline to cover background around each well edge']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
    Select the input objects:IdentifyWells
    Name the output objects:ExpandedWells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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
RescaleIntensity:[module_num:9|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notes:['Turn plate white']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enabled:False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
    Select the input image:ImageAfterMath
    Name the output image:RescaleIntensityWorms
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:.01,.1
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
MaskImage:[module_num:10|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notes:['This module is the start of defining the grid. It uses the inverted mask created from the expanded identified wells to create black holes over the white plate generated from RescaleIntensityWorms. This output can then be inverted to create white well objects for identification.']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
    Select the input image:RawData
    Name the output image:RescaleforGrid
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedWells
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    Invert the mask?:Yes

ImageMath:[module_num:11|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notes:['Inverting output from previous module to create white objects for identification.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertforGrid
    Image or measurement?:Image
    Select the first image:RescaleforGrid
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Identifying the wells to use as objects to define the grid ']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
    Select the input image:InvertforGrid
    Name the primary objects to be identified:WellsforGrid
    Typical diameter of objects, in pixel units (Min,Max):60,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
DefineGrid:[module_num:13|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notes:['Using the previous modules objects to generate a grid, and outputing over edged image to prepare for worm identification of highlighted worms. Using the grid will number the worms and get rid of some background.']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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Once
    Select the method to define the grid:Automatic
    Select the previously identified objects:WellsforGrid
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:298,258
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:1300,820
    Row number of the second cell:6
    Column number of the second cell:10
    Retain an image of the grid?:Yes
    Name the output image:GridedEdgedWorms
    Select the image on which to display the grid:RawData
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:14|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notes:['']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
    Select the defined grid:Grid
    Name the objects to be identified:GridWells
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:70
    Select the guiding objects:IdentifyWorms

SaveCroppedObjects:[module_num:15|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notes:['Saves a cropped image of each worm in its well for analysis using RandIndex. Uses GridWells as circle outline to remove more background.']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
    Objects:GridWells
    Directory:Default Input Folder sub-folder|\g<Time>
    Saved file format:png
    Do you want to save cropped images or object masks?:Images
    Image:RawData
